OpenViBE-Scenario

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal strea -> Channel Selector => #1
  Channel List = 1;2;3;4
  Action = Select
  Channel Matching Method = Index
-> CSV File Writer
  Filename = record-[$core{date}-$core{time}].csv
  Column separator = ;
  Use compression = true
#1 -> 0xc67a01dc Temporal Filter => #3
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 0.1
  High Cut-off Frequency (Hz) = 40
  Band Pass Ripple (dB) = 0.5
Signal=#3 -> Signal display
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#3 -> Matrix Sender
  TCP Port = 1234
